/* Under development
 *  
 */


/*
 * Read in image:
 * 	Should be able to calculate the dimensions of the montage
 * Need to ask what is
 * 	bSize
 * 	expansion size
 * 	corner
 * 
 */

macro "ROI Zoom"	{
	if (nImages > 1)	{
		print("ROIZoom only works on a single montage or image");
		return;
	}
	if (nImages == 0)	{
		print("No image open");
		return;
	}
		
	imageID = getImageID();
	title = getTitle();
	run("Select None");
	getDimensions(w, h, c, nFrames, dummy);

	// assume 1 row
	if (w == h) {
		nCol = 1;
		grout = 0;
	}
	else	{
		nCol = floor(w/h);
		grout = (w - (nCol * h)) / (nCol - 1);
	}

	// ask what size ROI and expansion and corner
	cornerArray = newArray("LT", "RT", "LB", "RB");
	// Make dialog box
	Dialog.create("Specify ROI Zoom"); 
	Dialog.addMessage("Select corner for zoom");
	Dialog.addChoice("Corner", cornerArray);
	Dialog.addMessage("What size box for expansion?");
	Dialog.addNumber("Box size (px)", 50);
	Dialog.addNumber("Expansion e.g. 2X", 2);
	Dialog.addNumber("Border for boxes (px)", 2);
	// need to add something here so that the user can define where boxes go
	Dialog.show();
	
	corner = Dialog.getChoice();
	bSize = Dialog.getNumber();
	expand = Dialog.getNumber();
	bStroke = Dialog.getNumber();
	// decisions collected

	// User defines the centre of the box for expansion
	setTool(7); // not sure how to force single point vs multi-point
	waitForUser("Define box", "Click on image to centre of box for expansion");
	if (selectionType == 10)	{
		getBoundingRect(xp, yp, width, height);
		// print("x="+xp+" y="+yp+" "+width+" "+height);
		makeRectangle(xp-(bSize/2),yp-(bSize/2),bSize,bSize);
		// need to do something where user clicks too close to the edge
		selectImage(imageID);
	}
	else	{
		print("Works with point selection only");
	}
	// setBatchMode(true);
	
	// figure out which column the selction is in
	// each panel is h x h pixels separated by grout
	sp = floor(xp / h);	// sp is the panel where selection is 0-based
	// this is risky but box should not be less than grout away from panel edge
	// x and y coords relative to the panel
	xp1 = xp - (sp * (h + grout));
	yp1 = yp - 0; // for future dev
	dSize = bSize * expand;
	setForegroundColor(255,255,255);
	for (i=0; i<nCol; i++)	{
		run("Select None");
		xq = xp1 + (i * (h + grout));
		yq = yp1 + 0; // for future dev
		makeRectangle(xq-(bSize/2),yq-(bSize/2),bSize,bSize);
		run("Copy");
		// make border
		makeRectangle(xq-((bSize + bStroke)/2),yq-((bSize + bStroke)/2),bSize+bStroke,bSize+bStroke);
		run("Fill");
		makeRectangle(xq-(bSize/2),yq-(bSize/2),bSize,bSize);
		run("Paste");
		run("Internal Clipboard");
		selectWindow("Clipboard");
		cmd = "width="+dSize+" height="+dSize+" constrain average interpolation=Bilinear";
		run("Size...", cmd);
		run("Select All");
		run("Copy");
		close("Clipboard");
		selectWindow(title);
		dStartx = (i * (h + grout)); // L
		dStarty = h - dSize; // B - move outside loop?
		// L dStartx is left side of panel; R dStartX is right side of panel - dSize
		// T dStarty = 0; B dStarty = h - dSize
		cmd = "width="+dSize+" height="+dSize+" x="+dStartx+" y="+dStarty;
		run("Specify...", cmd);
		run("Paste");
	}
}	

/*
 * run("Copy");

makePoint(352, 120);
run("Restore Selection");
setForegroundColor(255, 255, 255);
run("Draw", "slice");
//setTool("dropper");
//setTool("point");
run("Color Picker...");
//setTool("dropper");
run("Close");
run("Draw", "slice");
run("Line Width...", "line=2");
run("Draw", "slice");
setForegroundColor(198, 198, 198);
makeRectangle(300, 300, 100, 100);
setForegroundColor(198, 198, 198);
makeRectangle(300, 300, 100, 100);
setForegroundColor(5, 5, 5);
makeRectangle(300, 300, 100, 100);
setForegroundColor(173, 173, 173);
makeRectangle(300, 300, 100, 100);
//setTool("rectangle");
run("In [+]");
run("In [+]");
run("In [+]");
makeRectangle(546, 272, 9, 1);
//setTool("hand");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
run("Scale...");
run("Restore Selection");
run("Specify...", "width=100 height=100 x=300 y=300");
makeRectangle(300, 300, 100, 100);
makeRectangle(300, 300, 100, 100);
makeRectangle(300, 300, 100, 100);

 * 
 */

// do the next part      
	
	
	setBatchMode(true);
}

